PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = turtles_categorization
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine trial_2
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    CodeComponent draw_turtle
      Code Type = Auto->JS
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      Each Frame:
        turtle_green = visual.Pie(
            win,
            fillColor=[0, 128, 0],
            colorSpace='rgb255',
            start=0,
            end=90,
            radius=100,
            pos=(0,200)
        )
        turtle_yellow = visual.Pie(
            win,
            fillColor=[255, 192, 0],
            lineColor=[255, 192, 0],
            colorSpace='rgb255',
            start=0,
            end=90,
            radius=200,
            pos=(0,200)
        )
        )
        turtle_green.draw()
        #turtle_yellow.draw()
        win.flip()
    KeyboardComponent key_resp
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial_2
